PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[-1,-1,-1]
  expName = FeupDroneImages_Protocol
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent trialImage
      image [set every repeat] = $Image
      size = (0.593, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 256
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    PolygonComponent stim_square
      anchor = bottom-left
      fillColor = white
      pos = (-0.9, -0.5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine Welcome_Screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome!
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  Routine Instructions_Screen
    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Images captured by a Drone at FEUP will be shown in rapid succession.
        Pay attention to the images with minimal head movements if possible.

        Mentally count each instance of an image of a human laying down (red seater), which can show up in every possible position of the image.

        Press the SPACEBAR key when you are ready to start the Experiment.
    KeyboardComponent instructions_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EOG_Screen
    TextComponent EOG_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      text = Blink you eyes every 1 to 2 seconds.
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    PolygonComponent stim_square_EOG
      anchor = bottom-left
      fillColor = white
      pos = (-0.9, -0.5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 15
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  Routine EMG_Screen
    TextComponent EMG_text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 16
      text = Clench your jaw every 1 to 2 seconds.
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    PolygonComponent stim_square_EMG
      anchor = bottom-left
      fillColor = white
      pos = (-0.9, -0.5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 15
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  Routine Coding_Trials
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import pandas as pd
        import random

        # ------------------------------------------- .xlsx file path -------------------------------------------

        file_path = 'C:/Users/migue/OneDrive/Ambiente de Trabalho/Tese/AcquisitionProtocols/FEUP_droneImages.xlsx'
      Begin Experiment:
        imgs_file = pd.read_excel(file_path)

        permutation = np.random.permutation(imgs_file.index)
        shuffled_df = imgs_file.loc[permutation]

        img = shuffled_df['Image'].values
  Routine trial_BlockScreen
    TextComponent trial_Blocktext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = When you are ready to start a trial number, press the SPACEBAR!
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    KeyboardComponent trial_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GoodBye_Screen
    TextComponent goddbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating!
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  Routine fixation_cross
    PolygonComponent fix_cross
      fillColor = 1.0000, -1.0000, -1.0000
      lineWidth = 0.5
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine Welcome_Screen
  Routine Instructions_Screen
  Routine EOG_Screen
  Routine EMG_Screen
  Routine Coding_Trials
  LoopInitiator trial_block loopType="TrialHandler"
    loopType = sequential
    nReps = 12
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    Routine fixation_cross
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = C:/Users/migue/OneDrive/Ambiente de Trabalho/Tese/AcquisitionProtocols/FEUP_droneImages.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_021_2x3.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0},
        {'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_011_2x1.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0},
        {'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_012_1x3.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0},
        {'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_004_2x3.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0},
        {'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_031_1x2.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0},
        {'Image': 'C:\\Users\\migue\\OneDrive\\Ambiente de Trabalho\\Tese\\AcquisitionProtocols\\CroppedDronePhotos\\feupDrone_015_1x1.jpg', 'Condition': 'NonTarget', 'Centroid': 0.0, 'Visual_angle': 0.0, 'Stimulus_type': 0.0}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
      Routine trial
    LoopTerminator trials
    Routine trial_BlockScreen
  LoopTerminator trial_block
  Routine GoodBye_Screen
